PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = newer wtp
  Screen = 1
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Routines
  Routine Q1
    TextComponent Question1
      text = How likely were you to choose a social experience over a non-social experience?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent scale_msg1
      text = Very Unlikely (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent scale_msg2
      text = Very Likely (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent scale_msg3
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
      storeHistory = True
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  Routine Q3
    TextComponent Question3
      text = How likely were you to choose experiences involving friends over experiences involving family?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent scalemsg1
      text = Very Unlikely (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_2
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_4
      text = Very Likely (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating_3
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
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  Routine Q2
    TextComponent Question2
      text = How likely were you to choose a non-social experience over a social experience?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent scale1
      text = Very Unlikely (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent scale2
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text
      text = Very Likely (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating_2
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
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  Routine Q5
    TextComponent Question5
      text = How much did you enjoy participating?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent scale_1
      text = Not at all (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_5
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_6
      text = Very Much (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating_5
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
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  Routine ISI2
    TextComponent text4
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Q6_2
    TextComponent text_8
      text = How likely were you to choose experiences involving a significant other over experiences involving friends?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_12
      text = Very Unlikely (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_13
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_14
      text = Very Likely (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating_6
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
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  Routine Q6
    TextComponent text_7
      text = How likely were you to choose experiences involving a significant other over experiences involving friends?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine q9
    TextComponent text_11
      text = How likely were you to choose experiences involving a significant other over experiences involving family?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_21
      text = Very Unlikely (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_22
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_23
      text = Very Likely (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating_9
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
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  Routine q8
    TextComponent text_10
      text = How likely were you to choose experiences involving friends over experiences involving a significant other?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_18
      text = Very Unlikely (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_19
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_20
      text = Very Likely (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating_8
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
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  Routine Choice
    TextComponent leftbox
      text [set every repeat] = $Left
      stopVal [duration (s)] = 4.0
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.094
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    TextComponent rightbox
      text [set every repeat] = $Right
      stopVal [duration (s)] = 4.0
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.094
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    KeyboardComponent responses
      stopVal [duration (s)] = 4.0
      forceEndRoutine = False
      allowedKeys [set every repeat] = '1', '2'
      startVal [time (s)] = 0.0
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    TextComponent money1
      text [set every repeat] = $leftmoney
      stopVal [duration (s)] = 4.0
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent money2
      text [set every repeat] = $rightmoney
      stopVal [duration (s)] = 4.0
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.5, 0.1), opacity = 1)
        border_left = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.5, 0.1), opacity = 1)
      Each Frame:
        if responses.keys == '1':
            border_left.autoDraw=True

        if responses.keys =='2':
            border_right.autoDraw=True

        if money1.status == FINISHED:
            border_left.autoDraw = False

        if money2.status==FINISHED:
            border_right.autoDraw = False
    TextComponent blank
      stopVal [duration (s)] = 1.0
      startVal [condition] = $border_right. autoDraw==False
      letterHeight = 0.1
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  Routine trial
    TextComponent Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In this part of the task, you will be
        choosing between two options.

        Press the spacebar to start!
    KeyboardComponent spacebar
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine ISI
    TextComponent text_3
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Q7
    TextComponent text_9
      text = How likely were you to choose experiences involving family over experiences involving friends?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_15
      text = Very Unlikely (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_16
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_17
      text = Very Likely (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating_7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
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  Routine instructions
    TextComponent ty
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        Thank you for participating!

        Please notify the experimenter before moving on to the final part of the task
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine social1
    TextComponent leftbox1
      text [set every repeat] = $Left1
      stopVal [duration (s)] = 4.0
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.094
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    TextComponent rightbox1
      text [set every repeat] = $Right1
      stopVal [duration (s)] = 4.0
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      font = Times New Roman
      letterHeight = 0.094
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    KeyboardComponent response1
      storeCorrect = True
      stopVal [duration (s)] = 4.0
      forceEndRoutine = False
      allowedKeys [set every repeat] = '1', '2'
      startVal [time (s)] = 0.0
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    TextComponent money3
      text [set every repeat] = $leftmoney1
      stopVal [duration (s)] = 4.0
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent money4
      text [set every repeat] = $rightmoney1
      stopVal [duration (s)] = 4.0
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.5, 0.1), opacity = 1)
        border_left = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.5, 0.1), opacity = 1)
      Each Frame:
        if response1.keys == '1':
            border_left.autoDraw=True

        if response1.keys =='2':
            border_right.autoDraw=True




        if money3.status==FINISHED:
            border_left.autoDraw = False
        if money4.status==FINISHED:
            border_right.autoDraw = False
    TextComponent blank1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = $border_right. autoDraw==False
      letterHeight = 0.1
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  Routine Q4
    TextComponent Question4
      text = How likely were you to choose experiences involving family over experiences involving a significant other?
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent scales1
      text = Very Unlikely (1)
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent scales2
      text = Neutral
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent scales3
      text = Very Likely (7)
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    RatingScaleComponent rating_4
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
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Flow
  Routine trial
  LoopInitiator Loop loopType="TrialHandler"
    conditionsFile = ..\Activities1_DF.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'leftmoney': 0.05, 'Right': u'Putting together \na puzzle', 'rightmoney': 0.01, 'Left': u'Going to the movies \nwith a friend'},
      {'leftmoney': 0.05, 'Right': u'Having dinner with \nfamily', 'rightmoney': 0.02, 'Left': u'Going grocery shopping \nalone'},
      {'leftmoney': 0.02, 'Right': u'Practicing an\n instrument', 'rightmoney': 0.05, 'Left': u'Attending a family member\u2019s \nwedding'},
      {'leftmoney': 0.03, 'Right': u'Going to a sporting\nevent with friends', 'rightmoney': 0.05, 'Left': u'Putting gas in a car'},
      {'leftmoney': 0.04, 'Right': u'Watching a football \ngame from home', 'rightmoney': 0.01, 'Left': u'Attending a family \nbarbeque'},
      {'leftmoney': 0.03, 'Right': u'Going on a \ndinner date', 'rightmoney': 0.04, 'Left': u'Getting a haircut'},
      {'leftmoney': 0.01, 'Right': u'Buying coffee on \nthe way to work', 'rightmoney': 0.05, 'Left': u'Getting retweets \non a picture'},
      {'leftmoney': 0.01, 'Right': u'Going to a friend\u2019s \nbirthday party', 'rightmoney': 0.04, 'Left': u'Reading a book'},
      {'leftmoney': 0.05, 'Right': u'Going for a walk \nin the park', 'rightmoney': 0.01, 'Left': u'Playing a team sport'},
      {'leftmoney': 0.02, 'Right': u'Adding new friends\non facebook', 'rightmoney': 0.01, 'Left': u'Running a marathon'},
      {'leftmoney': 0.02, 'Right': u'Practicing photography', 'rightmoney': 0.04, 'Left': u'Going to a concert \nwith a friend'},
      {'leftmoney': 0.04, 'Right': u'Going to a work outing\nwith colleagues', 'rightmoney': 0.01, 'Left': u'Going on vacation \nby yourself'}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
    Routine Choice
    Routine ISI
  LoopTerminator Loop
  LoopInitiator Loop2 loopType="TrialHandler"
    conditionsFile = ..\SocialActivities_df_Final.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'leftmoney1': 0.050000000000000003, 'rightmoney1': 0.01, 'Left1': u'Taking classes with a friend', 'Right1': u'Taking a family member\n on a shopping trip'},
      {'leftmoney1': 0.050000000000000003, 'rightmoney1': 0.02, 'Left1': u"Sleeping over at \na friend's house", 'Right1': u'Taking your friend \nto the spa'},
      {'leftmoney1': 0.02, 'rightmoney1': 0.050000000000000003, 'Left1': u'Going to an amusement \npark with a friend', 'Right1': u'Baking a cake for a \nfamily member\u2019s birthday'},
      {'leftmoney1': 0.029999999999999999, 'rightmoney1': 0.050000000000000003, 'Left1': u'Going to a parade \nwith family', 'Right1': u'Making a friend\u2019s \nfavorite dinner'},
      {'leftmoney1': 0.040000000000000001, 'rightmoney1': 0.01, 'Left1': u'Getting retweeted by \na celebrity', 'Right1': u'Planning a surprise \nparty for a family member'},
      {'leftmoney1': 0.029999999999999999, 'rightmoney1': 0.040000000000000001, 'Left1': u'Going to a music\nfestival with friends', 'Right1': u'Buying flowers for \na significant other'},
      {'leftmoney1': 0.01, 'rightmoney1': 0.050000000000000003, 'Left1': u'Playing videogames \nwith friends', 'Right1': u'Taking your friend \non a cruise'},
      {'leftmoney1': 0.01, 'rightmoney1': 0.040000000000000001, 'Left1': u'Talking over the phone\nwith a friend', 'Right1': u'Talking over the phone\nwith a significant other'},
      {'leftmoney1': 0.050000000000000003, 'rightmoney1': 0.01, 'Left1': u'Posting Instagram stories', 'Right1': u'Making cookies to \ngive to a friend'}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
    Routine social1
    Routine ISI2
  LoopTerminator Loop2
  Routine instructions
  LoopInitiator questions loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine Q1
    Routine Q2
    Routine Q3
    Routine Q4
    Routine Q6_2
    Routine Q7
    Routine q8
    Routine q9
    Routine Q5
  LoopTerminator questions
