PsychoPy2experiment version="3.0.7"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = newer wtp
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Routines
  Routine Q1
    TextComponent Question1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose a social experience over a non-social experience?
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    TextComponent scale_msg1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scale_msg2
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    TextComponent scale_msg3
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
      storeHistory = True
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  Routine Q3
    TextComponent Question3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose experiences involving friends over experiences involving family?
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    TextComponent scalemsg1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent text_2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text_4
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_3
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine Q2
    TextComponent Question2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose a non-social experience over a social experience?
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    TextComponent scale1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scale2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine Q5
    TextComponent Question5
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How much did you enjoy participating?
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    TextComponent scale_1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Not at all (1)
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    TextComponent text_5
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text_6
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Much (7)
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    RatingScaleComponent rating_5
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine ISI2
    TextComponent text4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Choice
    TextComponent leftbox
      font = Times New Roman
      letterHeight = 0.094
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $LeftEx
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    TextComponent rightbox
      font = Times New Roman
      letterHeight = 0.094
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $RightEx
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    KeyboardComponent responses
      allowedKeys [set every repeat] = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent money1
      letterHeight = 0.1
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $LMoneyEx
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    TextComponent money2
      letterHeight = 0.1
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $RMoneyEx
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.5, 0.1), opacity = 1)
        border_left = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.5, 0.1), opacity = 1)
      Each Frame:
        if responses.keys == '1':
            border_left.autoDraw=True

        if responses.keys =='2':
            border_right.autoDraw=True

        if money1.status == FINISHED:
            border_left.autoDraw = False

        if money2.status==FINISHED:
            border_right.autoDraw = False
    TextComponent blank
      letterHeight = 0.1
      startVal [condition] = $border_right. autoDraw==False
      stopVal [duration (s)] = 1.0
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  Routine trial
    TextComponent Instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this part of the task, you will be choosing between two options.

        Please indicate which option you would prefer by using your keyboard to press `1` for the choice on the left, or `2` for the choice on the right.

        Each option is associated with a price, which will be subtracted from your earnings upon making a selection.

        You will have four seconds to make a response after seeing the choices.

        Press SPACE to continue.
    KeyboardComponent spacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Q4
    TextComponent Question4
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose experiences involving family over experiences involving a significant other
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    TextComponent scales1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scales2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent scales3
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_4
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine social1
    TextComponent leftbox1
      font = Times New Roman
      letterHeight = 0.094
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Left1
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    TextComponent rightbox1
      font = Times New Roman
      letterHeight = 0.094
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Right1
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    KeyboardComponent response1
      allowedKeys [set every repeat] = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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    TextComponent money3
      letterHeight = 0.1
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $leftmoney1
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    TextComponent money4
      letterHeight = 0.1
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $rightmoney1
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.5, 0.1), opacity = 1)
        border_left = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.5, 0.1), opacity = 1)
      Each Frame:
        if response1.keys == '1':
            border_left.autoDraw=True

        if response1.keys =='2':
            border_right.autoDraw=True




        if money3.status==FINISHED:
            border_left.autoDraw = False
        if money4.status==FINISHED:
            border_right.autoDraw = False
    TextComponent blank1
      letterHeight = 0.1
      startVal [time (s)] = $border_right. autoDraw==False
      stopVal [duration (s)] = 1.0
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  Routine instructions
    TextComponent ty
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Thank you for participating!

        Now you will be answering a few questions about your experience during the task.

        Use your mouse to click on the slider to respond to the question, then press ENTER to move on.

        Please press ENTER to continue!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst2
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You have the chance to complete a few practice rounds of this part of the study before completing the full task.

        If you would like to complete the practice rounds, press SPACE.

        If you would like to go straight to the full task, press ENTER.
    KeyboardComponent key_resp_3
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine Inst2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Activities1_DF2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('LeftEx', 'Going to a family\nbarbeque'), ('RightEx', 'Going shopping\nby yourself'), ('LMoneyEx', '$0.03 '), ('RMoneyEx', '$0.02 ')]),
      OrderedDict([('LeftEx', 'Helping a friend\nstudy for a test'), ('RightEx', 'Watching television\nat home'), ('LMoneyEx', '$0.01 '), ('RMoneyEx', '$0.04 ')]),
      OrderedDict([('LeftEx', 'Going for a run\nby yourself'), ('RightEx', 'Having lunch with\na significant other'), ('LMoneyEx', '$0.05 '), ('RMoneyEx', '$0.05 ')])]
    Routine Choice
    Routine ISI
  LoopTerminator trials
  LoopInitiator Loop loopType="TrialHandler"
    conditionsFile = Activities1_DF.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'leftmoney': 0.05, 'Right': 'Putting together \na puzzle', 'rightmoney': 0.01, 'Left': 'Going to the movies \nwith a friend'},
      {'leftmoney': 0.05, 'Right': 'Having dinner with \nfamily', 'rightmoney': 0.02, 'Left': 'Going grocery shopping \nalone'},
      {'leftmoney': 0.02, 'Right': 'Practicing an\n instrument', 'rightmoney': 0.05, 'Left': 'Attending a family member’s \nwedding'},
      {'leftmoney': 0.03, 'Right': 'Going to a sporting\nevent with friends', 'rightmoney': 0.05, 'Left': 'Putting gas in a car'},
      {'leftmoney': 0.04, 'Right': 'Watching a football \ngame from home', 'rightmoney': 0.01, 'Left': 'Attending a family \nbarbeque'},
      {'leftmoney': 0.03, 'Right': 'Going on a \ndinner date', 'rightmoney': 0.04, 'Left': 'Getting a haircut'},
      {'leftmoney': 0.01, 'Right': 'Buying coffee on \nthe way to work', 'rightmoney': 0.05, 'Left': 'Getting retweets \non a picture'},
      {'leftmoney': 0.01, 'Right': 'Going to a friend’s \nbirthday party', 'rightmoney': 0.04, 'Left': 'Reading a book'},
      {'leftmoney': 0.05, 'Right': 'Going for a walk \nin the park', 'rightmoney': 0.01, 'Left': 'Playing a team sport'},
      {'leftmoney': 0.02, 'Right': 'Adding new friends\non facebook', 'rightmoney': 0.01, 'Left': 'Running a marathon'},
      {'leftmoney': 0.02, 'Right': 'Practicing photography', 'rightmoney': 0.04, 'Left': 'Going to a concert \nwith a friend'},
      {'leftmoney': 0.04, 'Right': 'Going to a work outing\nwith colleagues', 'rightmoney': 0.01, 'Left': 'Going on vacation \nby yourself'}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
    Routine Choice
    Routine ISI
  LoopTerminator Loop
  LoopInitiator Loop2 loopType="TrialHandler"
    conditionsFile = Social Activities.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'leftmoney1': 0.02, 'rightmoney1': 0.01, 'Left1': 'Taking classes with a friend', 'Right1': 'Taking a family member\n on a shopping trip'},
      {'leftmoney1': 0.07, 'rightmoney1': 0.08, 'Left1': "Sleeping over at \na friend's house", 'Right1': 'Taking your friend \nto the spa'},
      {'leftmoney1': 0.01, 'rightmoney1': 0.02, 'Left1': 'Going to an amusement \npark with a friend', 'Right1': 'Baking a cake for a \nfamily member’s birthday'},
      {'leftmoney1': 0.03, 'rightmoney1': 0.09, 'Left1': 'Going to a parade \nwith family', 'Right1': 'Making a friend’s \nfavorite dinner'},
      {'leftmoney1': 0.04, 'rightmoney1': 0.03, 'Left1': 'Going apple-picking \nwith family', 'Right1': 'Planning a surprise \nparty for a family member'},
      {'leftmoney1': 0.02, 'rightmoney1': 0.07, 'Left1': 'Going to a music\nfestival with friends', 'Right1': 'Buying flowers for \na significant other'},
      {'leftmoney1': 0.01, 'rightmoney1': 0.04, 'Left1': 'Playing videogames \nwith friends', 'Right1': 'Taking your friend \non a cruise'},
      {'leftmoney1': 0.04, 'rightmoney1': 0.07, 'Left1': 'Talking over the phone\nwith a friend', 'Right1': 'Talking over the phone\nwith a significant other'},
      {'leftmoney1': 0.05, 'rightmoney1': 0.08, 'Left1': 'Going to the gym \nwith friends', 'Right1': 'Making cookies to \ngive to a friend'},
      {'leftmoney1': 0.09, 'rightmoney1': 0.04, 'Left1': 'Going on a blind date', 'Right1': 'Going to a coffee \nshop with friends'}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
    Routine social1
    Routine ISI2
  LoopTerminator Loop2
  Routine instructions
  LoopInitiator questions loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine Q1
    Routine Q2
    Routine Q3
    Routine Q4
    Routine Q5
  LoopTerminator questions
