PsychoPy2experiment version="3.0.7"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  expName = newer wtp
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Routines
  Routine Q1
    TextComponent Question1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose a social experience over a non-social experience?
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    TextComponent scale_msg1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scale_msg2
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    TextComponent scale_msg3
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
      storeHistory = True
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  Routine Q3
    TextComponent Question3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose experiences involving friends over experiences involving family?
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    TextComponent scalemsg1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent text_2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text_4
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_3
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine Q2
    TextComponent Question2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose a non-social experience over a social experience?
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    TextComponent scale1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scale2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine Q5
    TextComponent Question5
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How much did you enjoy participating?
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    TextComponent scale_1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Not at all (1)
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    TextComponent text_5
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent text_6
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Much (7)
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    RatingScaleComponent rating_5
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine ISI2
    TextComponent text4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Choice
    TextComponent leftbox
      font = Times New Roman
      letterHeight = 0.094
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $LeftEx
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    TextComponent rightbox
      font = Times New Roman
      letterHeight = 0.094
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $RightEx
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    KeyboardComponent responses
      allowedKeys [set every repeat] = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent money1
      letterHeight = 0.1
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $LMoneyEx
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    TextComponent money2
      letterHeight = 0.1
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $RMoneyEx
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.5, 0.1), opacity = 1)
        border_left = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.5, 0.1), opacity = 1)
      Each Frame:
        if responses.keys == '1':
            border_left.autoDraw=True

        if responses.keys =='2':
            border_right.autoDraw=True

        if money1.status == FINISHED:
            border_left.autoDraw = False

        if money2.status==FINISHED:
            border_right.autoDraw = False
    TextComponent blank
      letterHeight = 0.1
      startVal [condition] = $border_right. autoDraw==False
      stopVal [duration (s)] = 1.0
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  Routine trial
    TextComponent Instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this part of the task, you will be
        choosing between two options.

        Press the spacebar to start!
    KeyboardComponent spacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Q4
    TextComponent Question4
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How likely were you to choose experiences involving family over experiences involving a significant other
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    TextComponent scales1
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Unlikely (1)
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    TextComponent scales2
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Neutral
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    TextComponent scales3
      letterHeight = 0.07
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Very Likely (7)
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    RatingScaleComponent rating_4
      forceEndRoutine = True
      high = 7
      labels = Very Unlikely, Unlikely, Somewhat Unlikely, Neutral, Somewhat Likely, Likely, Very Likely
      low = 1
      pos = 0, -0.4
      size = 1.5
      startVal [time (s)] = 0.0
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  Routine social1
    TextComponent leftbox1
      font = Times New Roman
      letterHeight = 0.094
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Left1
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    TextComponent rightbox1
      font = Times New Roman
      letterHeight = 0.094
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Right1
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    KeyboardComponent response1
      allowedKeys [set every repeat] = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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    TextComponent money3
      letterHeight = 0.1
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $leftmoney1
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    TextComponent money4
      letterHeight = 0.1
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $rightmoney1
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        border_right = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (0.5, 0.1), opacity = 1)
        border_left = visual.Circle(win,radius = 0.4, edges = 90,lineColor='green',lineColorSpace = 'rgb', fillColor = None, pos = (-0.5, 0.1), opacity = 1)
      Each Frame:
        if response1.keys == '1':
            border_left.autoDraw=True

        if response1.keys =='2':
            border_right.autoDraw=True




        if money3.status==FINISHED:
            border_left.autoDraw = False
        if money4.status==FINISHED:
            border_right.autoDraw = False
    TextComponent blank1
      letterHeight = 0.1
      startVal [time (s)] = $border_right. autoDraw==False
      stopVal [duration (s)] = 1.0
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  Routine instructions
    TextComponent ty
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Thank you for participating!

        Please notify the experimenter before moving on to the final
        part of the task
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator Loop loopType="TrialHandler"
    conditionsFile = Examples\Activities1_DF2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('LeftEx', 'Going to a family\nbarbeque'), ('RightEx', 'Going shopping\nby yourself'), ('LMoneyEx', 0.03), ('RMoneyEx', 0.02)]),
      OrderedDict([('LeftEx', 'Helping a friend\nstudy for a test'), ('RightEx', 'Watching television\nat home'), ('LMoneyEx', 0.01), ('RMoneyEx', 0.04)]),
      OrderedDict([('LeftEx', 'Going for a run\nby yourself'), ('RightEx', 'Having lunch with\na significant other'), ('LMoneyEx', 0.05), ('RMoneyEx', 0.05)])]
    Routine Choice
    Routine ISI
  LoopTerminator Loop
