PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = choiceText
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Routines
  Routine ChoicePreferences
    TextComponent text
      color [set every repeat] = $[1.000,1.000,1.000]
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choices
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    RatingScaleComponent rating
      categoryChoices = $0, $.01, $.02, $.03, $.04, $.05
      forceEndRoutine = True
      high = .05
      low = 0
      pos = 0, -0.3
      size = 1.7
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating!


        Please press space to exit.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions1
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        For this next part of the experiment, you are going to get to use the money you earned in the card game to make some choices.

        You will be presented with a variety of everyday experiences.

        You will see one different experience on each trial.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
    TextComponent Instructions
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Please use the slider to indicate how much money you would spend on the following experiences.


        Press 'space' to begin!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions3
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        Below each expereince, you will see a slider indicating different prices points.

        Please move the slider to indicate how much of the money you earned you would be
        willing to spend on each experience.

        When making your choices, try to visualize actually having that experience.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions4
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        Do you have any questions?

        Please press the spacebar to begin the experiment.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions1
  Routine instructions2
  Routine instructions3
  Routine instructions4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ChoiceText_final.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('choices', 'Taking a family member\n on a shopping trip')]),
      OrderedDict([('choices', 'Taking your friend \nto the spa')]),
      OrderedDict([('choices', 'Snapchatting your friends')]),
      OrderedDict([('choices', 'Going out to dinner with friends')]),
      OrderedDict([('choices', "Looking at your friend's Snapchat stories")]),
      OrderedDict([('choices', 'Uploading photos on social media')]),
      OrderedDict([('choices', 'Taking your friend \non a cruise')]),
      OrderedDict([('choices', 'Viedochatting your friend over Snapchat')]),
      OrderedDict([('choices', 'Making cookies with your partner')]),
      OrderedDict([('choices', 'Sharing Youtube videos with your partner')]),
      OrderedDict([('choices', 'Getting a slice of \npizza with a friend')]),
      OrderedDict([('choices', 'Getting tagged in \nInstagram pictures')]),
      OrderedDict([('choices', 'Talking to a friend \nover Skype')]),
      OrderedDict([('choices', 'Walking around Central \nPark with family')]),
      OrderedDict([('choices', 'Watching videos on Youtube')]),
      OrderedDict([('choices', 'Having a Tweet go viral')]),
      OrderedDict([('choices', 'Playing volleyball\nwith friends')]),
      OrderedDict([('choices', 'Getting likes on an\nInstagram picture')]),
      OrderedDict([('choices', 'Going on a weekend\ngetaway with family')]),
      OrderedDict([('choices', 'Playing icebreakers\nwith classmates')]),
      OrderedDict([('choices', 'Going on a first date \nto the movies')]),
      OrderedDict([('choices', 'Going dancing with\na significant other')]),
      OrderedDict([('choices', 'Playing ping-pong\nwith friends')])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
    Routine ChoicePreferences
  LoopTerminator trials
  Routine end
